PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'S1', 'affected side (L/R)': '', 'paradigm (fmri, ultrasound, or emg)': 'emg', 'conditions file': 'run_1A.csv', 'mode': 'run'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = grip_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
      text = Thank you :)
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    PolygonComponent cross_end
      fillColor = white
      shape = cross
      size = cross_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      units = cm
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    KeyboardComponent listener_end
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        scanner_keys = []
        scanner_pulses = []
      Each Frame:
        temp = listener_end.getKeys()
        if len(temp) > 0:
            scanner_pulses.append(core.getTime())
            scanner_keys.append([key.value for key in temp])
            if 'escape' in temp:
                outlet.push_sample(['END'])
                core.quit()
      End Routine:
        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', time0)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.addData('stimulusNumber', stimulusNum)
            thisExpPulses.nextEntry()

        outlet.push_sample(['END'])
  Routine prompt
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    KeyboardComponent listener_prompt
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stop = visual.ShapeStim(
                win=win,
                name='stop',
                units='cm',
                size=dot_size,
                vertices='circle',
                ori=0.0,
                pos=(0, 0),
                draggable=False,
                anchor='center',
                lineWidth=1.0,
                colorSpace='rgb',
                lineColor='black',
                fillColor=red,
                opacity=None,
                depth=-1.0,
                interpolate=True
               )
        go = visual.ShapeStim(
                win=win,
                name='go',
                units='cm',
                size=dot_size,
                vertices='circle',
                ori=0.0, pos=(0, 0),
                draggable=False,
                anchor='center',
                lineWidth=1.0,
                colorSpace='rgb',
                lineColor='black',
                fillColor=green,
                opacity=None,
                depth=-2.0,
                interpolate=True
               )
      Begin Routine:
        grasp = image_stim[image]

        timer = core.CountdownTimer(2.5)
        fullTimer = core.CountdownTimer(5)

        scanner_keys = []
        scanner_pulses = []

        thisExpLog.addData('grasp', image)
        thisExpLog.addData('stimulusNumber', stimulusNum)
        thisExpLog.addData('side', side)
        thisExpLog.addData('position (pix)', screen_position[side])
      Each Frame:
        t = timer.getTime()
        t_full = fullTimer.getTime()

        if t > 0:
            if grasp.status != STARTED:
                grasp.setAutoDraw(True)
                go.setAutoDraw(True)
                t_im_on = core.getTime()
                thisExpLog.addData('image_onset', t_im_on)
                thisExpLog.addData('go_cue_on', 'null')
                outlet.push_sample(['IMG_ONSET_'+grasp.name])
                outlet.push_sample(['GO_ONSET'])
                grasp.status = STARTED
                go.status = STARTED

        if t <= 0:
            if grasp.status == STARTED:
                grasp.setAutoDraw(False)
                go.setAutoDraw(False)
                t_im_off = core.getTime()
                thisExpLog.addData('image_offset', t_im_off)
                thisExpLog.addData('go_cue_off', 'null')
                outlet.push_sample(['IMG_OFFSET_'+grasp.name])
                grasp.status = FINISHED
                go.status = FINISHED

        if t_full > 0 and t <=0:
            if stop.status != STARTED:
                # stop signal
                stop.setAutoDraw(True)
                thisExpLog.addData('stop_cue_on', core.getTime())
                outlet.push_sample(['STOP_ONSET'])
                stop.status = STARTED

        if t_full <= 0:
            thisExpLog.addData('stop_cue_off', core.getTime())
            stop.setAutoDraw(False)
            stop.status = FINISHED
            continueRoutine = False

        temp = listener_prompt.getKeys()
        if len(temp) > 0:
            scanner_pulses.append(core.getTime())
            scanner_keys.append([key.value for key in temp])
            if 'escape' in temp:
                outlet.push_sample(['END'])
                core.quit()
      End Routine:
        trial = grasps.thisTrial

        win.flip()
        thisExpLog.addData('time0', time0)
        thisExpLog.addData('time_grayscreen_on', t_grayscreen_on)
        thisExpLog.nextEntry()

        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', time0)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.addData('stimulusNumber', stimulusNum)
            thisExpPulses.nextEntry()
  Routine trial
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    KeyboardComponent listener
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        hold_dur = 3.5
        stop_dur = 2.5
        go_timer = core.CountdownTimer(hold_dur)
        stop_timer = core.CountdownTimer(hold_dur + stop_dur)

        scanner_keys = []
        scanner_pulses = []
      Each Frame:
        t_go = go_timer.getTime()
        t_stop = stop_timer.getTime()

        if t_go > 0 and go.status != STARTED:
           go.setAutoDraw(True)
           thisExpLog.addData('go_cue_on', core.getTime())
           outlet.push_sample(['GO_ONSET'])
           go.status = STARTED

        if t_go <= 0 and go.status != FINISHED:
            go.setAutoDraw(False)
            thisExpLog.addData('go_cue_off', core.getTime())
            go.status = FINISHED

        if t_stop > 0 and t_go <= 0:
            if stop.status != STARTED:
                thisExpLog.addData('stop_cue_on', core.getTime())
                stop.setAutoDraw(True)
                outlet.push_sample(['STOP_ONSET'])
                stop.status = STARTED

        if t_stop <= 0 and stop.status != FINISHED:
            stop.setAutoDraw(False)
            thisExpLog.addData('stop_cue_off', core.getTime())
            stop.status = FINISHED
            continueRoutine = False

        temp = listener.getKeys()
        if len(temp) > 0:
            scanner_pulses.append(core.getTime())
            scanner_keys.append([key.value for key in temp])
            if 'escape' in temp:
                outlet.push_sample(['END'])
                core.quit()
      End Routine:
        thisExpLog.addData('stimulusNumber', stimulusNum)
        thisExpLog.addData('image_onset', 'null')
        thisExpLog.addData('image_offset', 'null')
        thisExpLog.addData('side', side)
        thisExpLog.addData('grasp', image)
        thisExpLog.addData('position (pix)', 'null')
        thisExpLog.nextEntry()

        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', time0)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.addData('stimulusNumber', stimulusNum)
            thisExpPulses.nextEntry()
  Routine interblock_interval
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    KeyboardComponent listener_break
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        scanner_keys = []
        scanner_pulses = []

        stimulusNum += 1

        break_timer = core.CountdownTimer(3.5)
      Each Frame:
        t = break_timer.getTime()

        if t > 0 and stop.status != STARTED:
            thisExpLog.addData('break_cue_on', core.getTime())
            outlet.push_sample(['BREAK_START'])
            stop.setAutoDraw(True)
            stop.status = STARTED

        if t <= 0 and stop.status != FINISHED:
            stop.setAutoDraw(False)
            thisExpLog.addData('break_cue_off', core.getTime())
            outlet.push_sample(['BREAK_END'])
            stop.status = FINISHED
            continueRoutine = False

        temp = listener_break.getKeys()
        if len(temp) > 0:
            scanner_pulses.append(core.getTime())
            scanner_keys.append([key.value for key in temp])
            if 'escape' in temp:
                outlet.push_sample(['END'])
                core.quit()
      End Routine:
        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', time0)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.addData('stimulusNumber', stimulusNum)
            thisExpPulses.nextEntry()
  Routine wait_trigger
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    KeyboardComponent trigger
      allowedKeys = ['t', 'T', '5']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ready to start
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        stimulusNum = 1
        time0 = None
      Begin Routine:
        scanner_keys = []
        scanner_pulses = []
      Each Frame:
        temp = trigger.getKeys()
        if len(temp) > 0:
            if time0 is None:
                time0 = core.getTime()
                outlet.push_sample(['TRIGGER'])
            scanner_pulses.append(time0)
            scanner_keys.append([key.value for key in temp])
            continueRoutine = False
      End Routine:
        thisExpLog.addData('time_grayscreen_on', t_grayscreen_on)
        thisExpLog.addData('time0', time0)
        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', None)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.nextEntry()
  Routine preload_images
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    KeyboardComponent next
      allowedKeys = $allowedKeys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        from pandas import read_csv
        from psychopy import core
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Instantiate the StreamInfo
        info = StreamInfo(name='PsychoPy_Markers',
                          type='Markers',
                          channel_count=1,
                          nominal_srate=0,
                          channel_format='string',
                          source_id='griptask')

        # Create the outlet — your single pipe for all events
        outlet = StreamOutlet(info)

        t_grayscreen_on = None

        thisExpLog = data.ExperimentHandler(
                    name=expName,
                    version='1.0',
                    extraInfo=expInfo,
                    runtimeInfo=None,
                    dataFileName='{}_stimulus_times'.format(filename)
                    )
        thisExpPulses = data.ExperimentHandler(
                    name=expName,
                    version='1.0',
                    extraInfo=expInfo,
                    runtimeInfo=None,
                    dataFileName='{}_pulses'.format(filename)
                    )


        allowedKeys = ['t', 'T', '5', 'escape', 'space']
        conditionsFile = './conditions/'+ expInfo['paradigm (fmri, ultrasound, or emg)']+'/'+expInfo['conditions file']
        print(conditionsFile)
      Begin Routine:
        # preload images and create image_stim
        sides = ['L', 'R']
        screen_position = {'L': (-300, 0), 'R': (300, 0)}
        grasps = ['iflex', 'key', 'tripod', 'wrot', 'rpower',
        'wrist_flex', 'wrist_ext', 'pinch', 'power', 'point']
        num_grasps = 2*len(grasps)
        stimulus_path = 'stimuli/{}_{}.png'

        image_stim = {}

        for grasp in grasps:
            for side in sides:
                im_path = stimulus_path.format(grasp, side)
                image_stim[im_path] = visual.ImageStim(
                                            win=win,
                                            name=grasp+side,
                                            units='pix',
                                            image=im_path,
                                            mask=None,
                                            anchor='center',
                                            ori=0.0,
                                            pos=screen_position[side],
                                            draggable=False,
                                            size=[300, 300],
                                            color=[1,1,1],
                                            colorSpace='rgb',
                                            opacity=1,
                                            flipHoriz=True,
                                            flipVert=False,
                                            texRes=128.0,
                                            interpolate=True,
                                            depth=0.0
                                           )
      Each Frame:
        if len(image_stim) >= num_grasps:
            continueRoutine = False
  Routine initial_frames
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    VariableComponent dot_size
      startExpValue = 1
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    VariableComponent cross_size
      startExpValue = 0.3
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    KeyboardComponent listener1
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait_period+3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['mode'] == 'test':
            wait_period = 3
            signal_period = 0
        elif expInfo['mode'] == 'run':
            wait_period = 15
            signal_period = 3


        green = [-0.145, 0.576, -0.106]
        red = [0.9608, -0.2078, -0.3020]


        cross = visual.ShapeStim(
                win=win,
                name='stop',
                units='cm',
                size=cross_size,
                vertices='cross',
                ori=0.0,
                pos=(0, 0),
                draggable=False,
                anchor='center',
                lineWidth=1.0,
                colorSpace='rgb',
                lineColor='white',
                fillColor='white',
                opacity=1,
                depth=-1.0,
                interpolate=True
               )
      Begin Routine:
        scanner_keys = []
        scanner_pulses = []

        wait_timer = core.CountdownTimer(wait_period)
      Each Frame:
        temp = listener1.getKeys()

        t = wait_timer.getTime()

        if t > 0 and cross.status != STARTED:
            cross.setAutoDraw(True)
            cross.status = STARTED

        if t > 0 and t < signal_period:
            cross.setColor('black')

        if t <= 0:
            cross.status = FINISHED
            cross.setAutoDraw(False)
            continueRoutine = False


        if len(temp) > 0:
            scanner_pulses.append(core.getTime())
            scanner_keys.append([key.value for key in temp])

            if 'escape' in temp:
                outlet.push_sample(['END'])
                core.quit()
      End Routine:
        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', time0)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.nextEntry()
  Routine instruc
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    KeyboardComponent continue_listener
      allowedKeys = $allowedKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions
        You’ll see pictures of hand shapes on one side of the screen. When the green dot comes, make the hand shape using the same side of your body. When the red dot comes, relax your hand. Keep looking at the dot in the middle.
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        scanner_keys = []
        scanner_pulses = []
        continue_listener.clearEvents()
      Each Frame:
        if t_grayscreen_on is None:
            t_grayscreen_on = core.getTime()
            outlet.push_sample(['GRAYSCREEN_ON'])

        temp = continue_listener.getKeys()
        if len(temp) > 0:
             scanner_keys.append([key.value for key in temp])
             scanner_pulses.append(core.getTime())
             outlet.push_sample(['START_EXP'])
             continueRoutine = False
      End Routine:
        for i in range(len(scanner_keys)):
            thisExpPulses.addData('time_grayscreen_on', t_grayscreen_on)
            thisExpPulses.addData('time0', None)
            thisExpPulses.addData('keys_pressed', scanner_keys[i])
            thisExpPulses.addData('time', scanner_pulses[i])
            thisExpPulses.nextEntry()
Flow
  Routine preload_images
  Routine instruc
  Routine wait_trigger
  Routine initial_frames
  LoopInitiator grasps loopType="TrialHandler"
    conditionsFile = $conditionsFile
    loopType = sequential
    nReps = 1
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    Routine prompt
    LoopInitiator repeats loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine trial
    LoopTerminator repeats
    Routine interblock_interval
  LoopTerminator grasps
  Routine end
